CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:raw
    Name the primary objects to be identified:droplets
    Typical diameter of objects, in pixel units (Min,Max):150,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:droplets
    Calculate the Zernike features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:droplets
    Name the output objects:filtered_droplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.9
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:8|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:magenta
    Select objects to display:filtered_droplets

OverlayObjects:[module_num:9|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
    Input:raw
    Name the output image:OverlayObjects
    Objects:filtered_droplets
    Opacity:0.3

ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:droplets_inverted
    Image or measurement?:Image
    Select the first image:raw
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Smooth:[module_num:11|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
    Select the input image:droplets_inverted
    Name the output image:droplets_inverted_median
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:16.0
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:filtered_droplets
    Name the objects to be identified:droplets_w_outerborder
    Select the method to identify the secondary objects:Propagation
    Select the input image:droplets_inverted_median
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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